PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1000, 500]
  expName = testFTtutorial
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Routines
  Routine trial
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text [set every repeat] = $'TAP FINGERS OF YOUR ' + trialText + ' HAND'
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    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 12
      stopVal [duration (s)] = 20
      text = REST
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo(name='cortivision_markers', type='Markers', channel_count=1,
                          channel_format='int32', source_id='uniqueid12345')
        outlet = StreamOutlet(info)
      Begin Routine:
        outlet.push_sample(x=[trigger])
  Routine start
    TextComponent text_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = PRESS ANY KEY TO START
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = THE END
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('trialText', 'LEFT'), ('trigger', 1)]),
      OrderedDict([('trialText', 'RIGHT'), ('trigger', 2)])]
    Routine trial
  LoopTerminator trials
  Routine end
